PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [600,600]
  expName = Task 5
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent StudyText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8.0
      text [set every repeat] = $Study_word
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    SliderComponent Studyslider
      forceEndRoutine = True
      granularity = 0
      labels = "Familiar","Unfamiliar"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5)
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  Routine Test_Phase
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    TextComponent TestText
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
      text [set every repeat] = $test_word
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    TextboxComponent test_textbox
      bold = False
      editable = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextComponent submit_text
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = Click to submit
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    MouseComponent testmouse
      clickable = submit_text
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = C:/Users/Kaavya/Desktop/PSY310/PSYCHOPY/Word Priming/conditions 1.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Study_word': 'book'},
      {'Study_word': 'cushion'},
      {'Study_word': 'phone'},
      {'Study_word': 'marble'},
      {'Study_word': 'board'},
      {'Study_word': 'laptop'},
      {'Study_word': 'chart'},
      {'Study_word': 't-shirt'},
      {'Study_word': 'mouse'},
      {'Study_word': 'pastry'},
      {'Study_word': 'case'},
      {'Study_word': 'cruise'},
      {'Study_word': 'police'},
      {'Study_word': 'keys'},
      {'Study_word': 'poster'}]
    Routine trial
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = C:/Users/Kaavya/Desktop/PSY310/PSYCHOPY/Word Priming/conditions 2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_word': 'l_pt_p', 'Reference': 'laptop', 'old_new': 'old'},
      {'test_word': '_ha_t', 'Reference': 'chart', 'old_new': 'old'},
      {'test_word': 't_hi_t', 'Reference': 'thsirt', 'old_new': 'old'},
      {'test_word': '_ou_se', 'Reference': 'mouse', 'old_new': 'old'},
      {'test_word': 'P_as_tr_', 'Reference': 'pastry', 'old_new': 'old'},
      {'test_word': 'c_s_', 'Reference': 'case', 'old_new': 'old'},
      {'test_word': '_ru_is_', 'Reference': 'cruise', 'old_new': 'old'},
      {'test_word': 'P_li_e', 'Reference': 'police', 'old_new': 'old'},
      {'test_word': 'K_y_', 'Reference': 'keys', 'old_new': 'old'},
      {'test_word': 'p_st_r', 'Reference': 'poster', 'old_new': 'old'},
      {'test_word': '_o_rd', 'Reference': 'board', 'old_new': 'old'},
      {'test_word': '_a_bl_', 'Reference': 'marble', 'old_new': 'old'},
      {'test_word': '_ho_e', 'Reference': 'phone', 'old_new': 'old'},
      {'test_word': '_oo_', 'Reference': 'book', 'old_new': 'old'},
      {'test_word': 'c_s_io', 'Reference': 'cushion', 'old_new': 'old'},
      {'test_word': 'ta_l_', 'Reference': 'table', 'old_new': 'new'},
      {'test_word': 'p_nc_l', 'Reference': 'pencil', 'old_new': 'new'},
      {'test_word': 'v_s_', 'Reference': 'vase', 'old_new': 'new'},
      {'test_word': 'bo_t_e', 'Reference': 'bottle', 'old_new': 'new'},
      {'test_word': 'c_m_ra', 'Reference': 'camera', 'old_new': 'new'}]
    Routine Test_Phase
  LoopTerminator trials_2
